PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = untitled
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1.Click on the displayed star to continue.
        2.Press the number displayed to continue.
               press any key to continue:)
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you
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  Routine Welcome
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome
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  Routine focus_center
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    PolygonComponent polygon_2
      fillColor = white
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine number_display
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $number
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    KeyboardComponent key_resp
      allowedKeys = '1','2','3','4','5','6','7','8','9','0'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine star_display
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    PolygonComponent polygon
      fillColor = white
      pos [set every repeat] = $position
      shape = star7
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = $polygon
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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Flow
  Routine Welcome
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychopy-1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'number': 0, 'correct': 0, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0, 0)},
      {'number': 1, 'correct': 1, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0, 0.3)},
      {'number': 2, 'correct': 2, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0.3, 0)},
      {'number': 3, 'correct': 3, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0.3, 0.3)},
      {'number': 4, 'correct': 4, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (-0.3, -0.3)},
      {'number': 5, 'correct': 5, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (-0.3, 0)},
      {'number': 6, 'correct': 6, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0, -0.3)},
      {'number': 7, 'correct': 7, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (-0.3, 0.3)},
      {'number': 8, 'correct': 8, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0, -0.3)},
      {'number': 9, 'correct': 9, 'image': 'images\\Screenshot 2024-05-18 164303.png', 'position': (0.3, -0.3)}]
    Routine number_display
    Routine star_display
    Routine focus_center
  LoopTerminator trials
  Routine Thank_you
